WorkflowBuilder(Version=2.8.2)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:ClockSynchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=5000
              SerialNumber=23101736
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=3000
              SerialNumber=23101737
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraLightMonitor
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=3000
              SerialNumber=23032826
              Gain=0
              Binning=2
              FrameEvents=CameraLightMonitor
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch1Events
              SampleRate=SampleRate500Hz
              DeliverPellet=Patch1DeliverPellet
              PelletDelivered=Patch1PelletDelivered
              DueTime=PT1S
              Count=2
              ResetFeeder=Patch1ResetFeeder
              PortName=COM3
              Radius=-4
              WheelDisplacement=Patch1WheelDisplacement
            -> WorkflowOutput

        GroupWorkflow Nest
            ExternalizedMapping(PortName, BaselineWeightTrigger, FilterWindow, WeightData, TareCommands, TareEvents)
            -> IncludeWorkflow
              Path=Aeon.Environment:WeightScale.bonsai
              PortName=COM7
              BaselineWeightTrigger=NestBaselineWeight
              FilterWindow=40
              WeightData=NestWeightData
              TareCommands=NestTareCommands
              TareEvents=NestTareEvents
            -> WorkflowOutput

        GroupWorkflow NestRfid1
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, Location, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM14
              RfidEvents=NestRfid1Events
              Location(X=1155, Y=664)
              InboundRfidDetected=NestRfid1InboundDetected
            -> WorkflowOutput

        GroupWorkflow Patch1Rfid
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, Location, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM12
              RfidEvents=Patch1RfidEvents
              Location(X=902, Y=565)
              InboundRfidDetected=Patch1RfidInboundDetected
            -> WorkflowOutput

        GroupWorkflow LightCycle
            ExternalizedMapping(EventSocket, RoomName, LightEvents, LightCommands, CommandSocket)
            -> IncludeWorkflow
              Path=Aeon.Environment:LightClient.bonsai
              EventSocket=>tcp://172.24.158.103:4303
              RoomName=AEON4
              LightEvents=LightEvents
              LightCommands=LightCommands
              CommandSocket=>tcp://172.24.158.103:4304
            -> WorkflowOutput

            ExternalizedMapping(ConfigFileName)
            -> IncludeWorkflow(Path=Aeon.Environment:LightCycle.bonsai, ConfigFileName=lightcycle.config)
            -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
            -> MulticastSubject LightCommands

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          ThresholdValue=83
          Mask=Config\ArenaMask-AEON4_2024-01-19.png
          TrackingCount=1
          TrackingEvents=TrackingTop
        -> WorkflowOutput

    GroupWorkflow ModelPathController
        ExternalizedMapping(Path, PathName)
        -> IncludeWorkflow(Path=Aeon.Acquisition:PathController.bonsai, Path=Z:\aeon\data\processed, PathName=ModelPathPrefix)
        -> WorkflowOutput

    GroupWorkflow PoseTrackingTop
        ExternalizedMapping(ModelPath, PathPrefix, FrameEvents, CentroidMinConfidence, IdentityMinConfidence, PartMinConfidence, FrameStep, PoseTrackingEvents)
        -> IncludeWorkflow
          Path=Extensions\PoseTracking.bonsai
          ModelPath=""
          PathPrefix=ModelPathPrefix
          FrameEvents=CameraTop
          CentroidMinConfidence=nil
          IdentityMinConfidence=nil
          PartMinConfidence=nil
          FrameStep=3
          PoseTrackingEvents=PoseTrackingTop
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, Patch3Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1273, Y=518), Point(X=1183, Y=517), Point(X=1183, Y=623), Point(X=1275, Y=615)))
          Patch1Region(ArrayOfPoint(Point(X=861, Y=558), Point(X=884, Y=556), Point(X=883, Y=577), Point(X=861, Y=577)))
          Patch2Region(ArrayOfPoint(Point(X=577, Y=723), Point(X=595, Y=732), Point(X=584, Y=753), Point(X=567, Y=744)))
          Patch3Region(ArrayOfPoint(Point(X=565, Y=394), Point(X=583, Y=383), Point(X=594, Y=403), Point(X=576, Y=415)))
          ArenaCenter(X=680, Y=565)
          ArenaInnerRadius=487
          ArenaOuterRadius=515
        -> WorkflowOutput

    GroupWorkflow AverageLightIntensity
        ExternalizedMapping(FrameEvents, LightMonitorEvents)
        -> IncludeWorkflow(Path=Extensions\AverageLightIntensity.bonsai, FrameEvents=CameraLightMonitor, LightMonitorEvents=LightMonitor)
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Environment.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> Patch1MissedPellets
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> Patch1State
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> Patch2MissedPellets
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> Patch2State
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> Patch3MissedPellets
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> Patch3State
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchDummy1State
    Aeon.Acquisition.StateRecoverySubject<Social.BlockState> BlockState
    PublishSubject<Bonsai.Harp.Timestamped(System.Int32)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentStateMetadata)> EnvironmentState
    Aeon.Acquisition.StateRecoverySubject<Social.Environment> EnvironmentConfiguration
    PublishSubject<Bonsai.Harp.Timestamped(System.String)> ReloadEnvironment
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> Patch1ManualPellet
    PublishSubject<System.String> SubjectAlertMessages

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject Patch1DistanceState => #14
    SubscribeSubject Patch1State
    -> MemberSelector(Selector=Item1) => #16
    #14, #16 -> CombineLatest => #17
    #17, #14 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject Patch1State
    -> GroupWorkflow ToArray => #22
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject Patch1DeliveryCount => #23
    #22, #23 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject Patch1CurrentThreshold

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch1Events, PelletDelivered=Patch1PelletDelivered)
    -> PublishSubject Patch1PelletMonitor
    -> MemberSelector(Selector=Value)
    -> PublishSubject Patch1PelletMonitorValue

    SubscribeSubject Patch1TimeSpent
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        it as Patch1)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject Patch1TimeSinceLastVisit
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        it as Patch1)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject Patch1WheelDisplacement
    -> MemberSelector(Selector=Value)
    -> Accumulate
    -> IncludeWorkflow(Path=Extensions\RepeatEveryBlock.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        it as Patch1)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch1Events, WheelPatch=Patch1WheelDisplacement, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEveryBlock.bonsai)
    -> BehaviorSubject Patch1TimeSpent

    SubscribeSubject Patch1TimeSpent
    -> IncludeWorkflow(Path=Extensions\RepeatEveryBlock.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject Patch1TimeSinceLastVisit

    SubscribeSubject PoseTrackingTop
    -> Merge
    -> MemberSelector(Selector=PoseIdentityMatching)
    -> BehaviorSubject SubjectPoses

    SubscribeSubject SubjectPoses
    -> SelectMany InArena
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Seconds) => #1
        #0 -> MemberSelector(Selector=Value)
        -> Merge => #3
        #1, #3 -> CombineLatest
        -> MemberSelector(Selector="Item2,Item1")
        -> Bonsai.Harp.CreateTimestamped => #6
        ExternalizedMapping(Center, Radius) => #7
        #6, #7 -> Condition InArena
            WorkflowInput Source1
            -> Bonsai.Harp.ConvertTimestamped => #1
                WorkflowInput Source1
                -> MemberSelector(Selector=Centroid.Position)
                -> WorkflowOutput
            ExternalizedMapping(Value(DisplayName=Center)) => #2
            #1, #2 -> Aeon.Acquisition.DistanceFromPoint(Value(X=711, Y=539))
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=Radius)) => #5
            #4, #5 -> LessThan(Operand=DoubleProperty(Value=474))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> ToList => #10
        #0 -> MemberSelector(Selector=Seconds) => #11
        #10, #11 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> BehaviorSubject SubjectsInArena
    -> GroupWorkflow SubjectIdentities => #61
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Merge
        -> MemberSelector(Selector=Identity)
        -> WorkflowOutput
    SubscribeSubject PoseTrackingTop
    -> Merge => #63
    #61, #63 -> WindowTrigger(Count=nil, TimeSpan=PT5S)
    -> SelectMany
        WorkflowInput Source1
        -> Distinct
        -> ToList
        -> WorkflowOutput
    -> BehaviorSubject StableSubjectsInArena

    SubscribeSubject NestWeightData
    -> MemberSelector(Selector=BaselinedWeight)
    -> Condition StableWeight
        WorkflowInput Source1
        -> MemberSelector(Selector=Confidence) => #1
        ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
        #1, #2 -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> Condition SubjectOnScale
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject SubjectWeight => #72
    SubscribeSubject StableSubjectsInArena => #73
    SubscribeSubject SubjectPoses => #74
    #72, #73, #74 -> CombineLatest => #75
    #75, #72 -> Sample
    -> Condition SingleSubjectInArena
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Count)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany LabeledWeight
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item3.Value)
        -> Merge => #2
        #0, #2 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1.Item2[0] != Item2.Identity
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Weight,
            Item2.Identity as Identity,
            Item2.IdentityIndex as IdentityIndex)
        -> InputMapping(Selector="it,Weight.Timestamp")
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> PublishSubject LabeledWeight

    SubscribeSubject LabeledWeight => #80
    SubscribeSubject SynchronizerEvents => #81
    #80, #81 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT1S) => #82
    SubscribeSubject SubjectPoses
    -> MemberSelector(Selector=Value)
    -> SelectMany => #85
        WorkflowInput Source1
        -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Identity as Identity,
            IdentityIndex as IdentityIndex)
        -> ToList
        -> OrderBy(KeySelector=IdentityIndex)
        -> WorkflowOutput
    #82, #85 -> WithLatestFrom
    -> SelectMany AverageWeights
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> Merge
        -> MemberSelector(Selector=Identity) => #4
        #1, #4 -> CombineLatest
        -> SelectMany
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            #0 -> MemberSelector(Selector=Item1)
            -> Merge
            -> MemberSelector(Selector=Value) => #4
            #1, #4 -> CombineLatest
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1,Item2.Identity")
                -> Equal
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: double(Item2.Weight.Value)
            -> ToList
            -> Bonsai.Numerics.DescriptiveStatistics
            -> MemberSelector(Selector=Mean) => #10
            #10, #1 -> Zip
            -> WorkflowOutput
        -> ToArray
        -> WorkflowOutput
    -> PublishSubject AverageWeights

    SubscribeSubject SubjectsInArena
    -> GroupWorkflow StableSubjectCount => #90
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Count)
        -> DistinctUntilChanged => #2
        ExternalizedMapping(DueTime(DisplayName=StabilityPeriod)) => #3
        #2, #3 -> Throttle(DueTime=PT0S)
        -> WorkflowOutput
    SubscribeSubject SubjectPoses
    -> MemberSelector(Selector=Value.Count) => #92
    #90, #92 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionCondition AllSubjectsInArena
      Expression: Item1 > 0 && Item1 == Item2
    -> MemberSelector(Selector=Item1) => #95
    SubscribeSubject ActivityCenter
    -> MemberSelector(Selector=Seconds) => #97
    #95, #97 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MulticastSubject BaselineTrigger
    -> MulticastSubject NestBaselineWeight

    SubscribeSubject SubjectWeight => #102
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #104
    #102, #104 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Aeon.Foraging:PelletMissed.bonsai
      PelletDelivered=Patch1PelletDelivered
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=Patch1WheelDisplacement
    -> MulticastSubject Patch1MissedPellets

    SubscribeSubject Patch1PelletDelivered
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow Patch1TotalPelletsDelivered(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject Patch1MissedPellets
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow Patch1TotalMissedPellets(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject NestRfid1InboundDetected
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #117
      Expression:
        new(
        Seconds as Seconds,
        Value.Location as Location,
        Value.TagId as TagId,
        "NestRfid1" as Name,
        3 as Index)
    SubscribeSubject Patch1RfidInboundDetected
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #119
      Expression:
        new(
        Seconds as Seconds,
        Value.Location as Location,
        Value.TagId as TagId,
        "Patch1" as Name,
        5 as Index)
    #117, #119 -> Merge
    -> InputMapping(Selector="Seconds,Location,TagId,Name,Index", TypeMapping=TypeMapping<RfidTaggedMeasurement>)
    -> PublishSubject RfidMeasurements

GroupWorkflow Alerts
    GroupWorkflow SubjectAlerts
        SubscribeSubject SubjectAlertMessages
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject Patch1PelletMonitor => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Patch1Dispenser
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            "Patch1" as Name,
            Count as Count)
        -> IncludeWorkflow Patch1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #13
        ExternalizedMapping(PelletThreshold) => #14
        #13, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Count) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #16
        -> Format
          Format:
            ## **Low Food**
            **Patch**: {0}
            **Current Pellet Estimate**: {1}
          Selector="Value.Name,Value.Count"
        -> MulticastSubject SubjectAlertMessages
        #16 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Value.Name,Value.Count", Priority=Alert, Type=LowFood)
        -> MulticastSubject AlertLogs

        SubscribeSubject Patch1MissedPellets
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #23
        SubscribeSubject SubjectState => #24
        #23, #24 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #26 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject SubjectStart
        -> SelectMany SubjectTrackingAlerts
            WorkflowInput Source1
            -> AsyncSubject ActiveSubject

            SubscribeSubject SubjectPoses => #2
            SubscribeSubject ActiveSubject
            -> MemberSelector(Selector=Value.Id)
            -> PropertyMapping(Identity) => #5
            #2, #5 -> GetActiveSubject(Identity=Test1) => #6
            Source2=#6 -> PublishSubject ActiveSubjectPose

            SubscribeSubject ActiveSubjectPose => #8
            ExternalizedMapping(DueTime(DisplayName=MissingTimeout)) => #9
            #8, #9 -> Throttle(DueTime=PT30M) => #10
            -> Format
              Format:
                ## **Subject Missing**
                **Subject**: {0}
              Selector=Value.Identity
            -> MulticastSubject SubjectAlertMessages
            #10 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Value.Identity, Priority=Alert, Type=TrackingFailure, Timestamp=Seconds)
            -> MulticastSubject AlertLogs

            SubscribeSubject ActiveSubjectPose
            -> GroupWorkflow SpeedThreshold
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Value.Centroid.Position)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Dsp.Norm(NormType=L2) => #3
                ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
                #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
                #0 -> MemberSelector(Selector=Value.Identity) => #6
                #0 -> MemberSelector(Selector=Seconds) => #7
                #5, #6, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item3 as Timestamp,
                    Item2 as Identity,
                    Item1 as Value)
                -> DistinctUntilChangedBy(KeySelector=Value)
                -> WorkflowOutput
            -> Condition TrackingUnstable
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M)
            -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Identity, Priority=Alert, Type=TrackingUnstable, Timestamp=Timestamp)
            -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject Patch1State
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Count) => #5
            #2, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression:
                new(
                Item1 as Patch1State,
                Item2 as PatchDispenser1)
            SubscribeSubject Patch1TimeSpent
            -> Take(Count=1) => #9
            SubscribeSubject Patch1TimeSinceLastVisit
            -> Take(Count=1) => #11
            #9, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Patch1TimeSpent,
                Item2 as Patch1TimeSinceLastVisit)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #16
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #18
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #20
            #18, #20 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #23
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #26
            SubscribeSubject Patch1TotalPelletsDelivered => #27
            SubscribeSubject Patch1TotalMissedPellets => #28
            #27, #28 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression:
                new(
                Item1 as Patch1TotalPelletsDelivered,
                Item2 as Patch1TotalMissedPellets)
            #7, #13, #16, #23, #26, #30 -> Zip
            -> Take(Count=1) => #32
            -> Format => #33
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #32 -> Format => #34
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.Patch1State.Threshold,Item1.Patch1State.D0,Item1.Patch1State.Delta,Item2.Patch1TimeSpent,Item2.Patch1TimeSinceLastVisit,Item6.Patch1TotalPelletsDelivered,Item6.Patch1TotalMissedPellets
            #33, #34 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject EnvironmentState => #13
        ExternalizedMapping(DueTime(DisplayName=MaintenanceTimeout)) => #14
        #13, #14 -> Throttle(DueTime=PT15M)
        -> Condition IsMaintenance
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Type)
            -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Maintenance))
            -> WorkflowOutput
        -> MemberSelector(Selector=Seconds) => #17
        -> Aeon.Acquisition.GetDateTime
        -> Format
          Format:
            ## Maintenance Timeout
            **Started at**: {0}
          Selector=""
        -> MulticastSubject EnvironmentAlertMessages
        #17 -> IncludeWorkflow VideoEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Value, Priority=Alert, Type=MaintenanceTimeout, Timestamp=Seconds)
        -> MulticastSubject AlertLogs

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #27
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\Tests\social-dev-0864659, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #28
        #27, #28 -> Condition GreaterThan => #29
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #29 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        GroupWorkflow DroppedFramesMonitor => #34
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #0
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #1
            #0, #1 -> Merge
            -> WorkflowOutput
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #34 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        GroupWorkflow StreamTimeoutMonitor => #39
            IncludeWorkflow(Path=Extensions\StreamTimeout.bonsai, StreamEvents=CameraTop, DueTime=PT1S) => #0
            IncludeWorkflow(Path=Extensions\StreamTimeout.bonsai, StreamEvents=CameraPatch1, DueTime=PT1S) => #1
            #0, #1 -> Merge => #2
            SubscribeSubject StartCameras => #3
            #2, #3 -> SubscribeWhen => #4
            SubscribeSubject StopCameras => #5
            #4, #5 -> TakeUntil
            -> Repeat
            -> WorkflowOutput
        -> Format
          Format:
            ## **Stream Timeout**
            **Stream**: {0}
          Selector=Value
        -> MulticastSubject EnvironmentAlertMessages
        #39 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Value, Priority=Alert, Type=StreamTimeout, Timestamp=Seconds)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        GroupWorkflow HeartbeatSources
            IncludeWorkflow Patch1Events(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #0
            IncludeWorkflow VideoEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #1
            IncludeWorkflow SynchronizerEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #2
            #0, #1, #2 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Acquisition:SynchronizerMonitor.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanUtcTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT1M) => #51
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #51 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanTimestamp,MeanUtcTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanTimestamp
        -> MulticastSubject AlertLogs

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectAeon, FallbackPath=D:\Tests, ChunkSize=1)

    ExternalizedMapping(WorkflowName)
    -> IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Social-AEON4.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #10
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #12
    #10, #12 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject PoseTrackingTop
    -> SelectMany LogPoseTracking
        WorkflowInput Source1
        -> AsyncSubject PoseTrackingGroup
        -> MemberSelector(Selector=Key)
        -> AsyncSubject PoseTrackingMetadata

        SubscribeSubject PoseTrackingGroup
        -> Merge => #5
        -> MemberSelector(Selector=PoseIdentityCollection) => #6
        ExternalizedMapping(LogName) => #7
        #6, #7 -> IncludeWorkflow PoseTrackingMetadata(Path=Aeon.Acquisition:LogPoseTracking.bonsai, IdentityIndex=nil, Address=202, LogName=CameraTop) => #8
        #5 -> MemberSelector(Selector=PoseIdentityMatching) => #9
        #9, #7 -> IncludeWorkflow PoseTrackingMetadata(Path=Aeon.Acquisition:LogPoseTracking.bonsai, IdentityIndex=nil, Address=203, LogName=CameraTop) => #10
        #8, #10 -> Zip
        -> WorkflowOutput

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject LightMonitor
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraLightMonitor, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject Patch1Events => #21
    SubscribeSubject Patch1Dispenser
    -> IncludeWorkflow Patch1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #24
    SubscribeSubject Patch1ManualPellet
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #26
    SubscribeSubject Patch1MissedPellets
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #28
    #21, #24, #26, #28 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject Patch1State
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #32
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1Events
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #34
    #32, #34 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Patch1_State, Selector=nil)

    SubscribeSubject BlockState
    -> IncludeWorkflow Patch1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Environment_BlockState, Selector=nil)

    SubscribeSubject EnvironmentConfiguration
    -> IncludeWorkflow Patch1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Environment_ActiveConfiguration)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #47
    SubscribeSubject Annotations => #48
    #47, #48 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Environment_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject LabeledWeight
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_SubjectWeight
      Selector="Seconds,Value.Weight.Value,Value.Weight.Confidence,Value.Identity,Value.IdentityIndex"

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #56
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #58
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #60
    SubscribeSubject InPatch3
    -> IncludeWorkflow Patch3(Path=Extensions\FormatRegionVisits.bonsai) => #62
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #64
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #66
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #68
    #56, #58, #60, #62, #64, #66, #68 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject NestRfid1Events
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=NestRfid1, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject Patch1RfidEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1Rfid, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    Timer(DueTime=PT0S, Period=PT0.1S)
    -> Aeon.Acquisition.AvailableMemory => #77
    SubscribeSubject GlobalTrigger
    -> MemberSelector(Selector=Seconds) => #79
    #77, #79 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=System_AvailableMemory, Selector=nil)

    SubscribeSubject NestWeightData
    -> MemberSelector(Selector=RawWeight)
    -> Aeon.Environment.FormatWeight(Address=200) => #85
    SubscribeSubject NestTareEvents
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #87
    SubscribeSubject NestWeightData
    -> MemberSelector(Selector=FilteredWeight)
    -> Aeon.Environment.FormatWeight(Address=202) => #90
    SubscribeSubject BaselineTrigger
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8)) => #92
    #85, #87, #90, #92 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Nest, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject LightEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Environment_LightEvents, Selector=nil)

ExternalizedMapping(SelectedStream)
-> GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=4))
        -> VisualizerMapping => #6
        SubscribeSubject Patch1CurrentThreshold
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #9
        SubscribeSubject Patch1PelletMonitorValue
        -> VisualizerMapping => #11
        #3, #6, #9, #11 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=3
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> VisualizerMapping => #13
        SubscribeSubject RfidMeasurements
        -> RfidVisualizerBuilder(Capacity=200)
        -> VisualizerMapping => #16
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=3, int=7))
        -> VisualizerMapping => #19
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector=Patch1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #22
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector=Patch1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #25
        #16, #19, #22, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #27
        #13, #27 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        Aeon.Environment.ExperimentProperties(HelpVisible=false, ToolbarVisible=false)
        -> VisualizerMapping => #1
        SubscribeSubject VideoEvents
        -> Aeon.Environment.ButtonSource(Text="Reload Environment")
        -> MulticastSubject ReloadEnvironment
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Environment(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #7
        SubscribeSubject SubjectPoses
        -> MemberSelector(Selector=Value)
        -> VisualizerMapping => #10
        SubscribeSubject CameraLightMonitor
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #13
        #7, #10, #13 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject Patch1PelletDelivered
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch1(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch1Controller, DispenserState=Patch1Dispenser)
        -> VisualizerMapping => #3
        SubscribeSubject VideoEvents
        -> Aeon.Environment.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #7
        SubscribeSubject VideoEvents
        -> Aeon.Environment.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #11
        SubscribeSubject Patch1State
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression:
            new(
            Item1 as Threshold,
            Item2 as D0,
            Item3 as Rate)
        SubscribeSubject BlockState => #14
        SubscribeSubject Heartbeats
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #16
        SubscribeSubject BlockTransition => #17
        IntProperty(Value=0) => #18
        #17, #18 -> Scan => #19
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Value < 0 ? 0 : Accumulation + 1
            -> WorkflowOutput
        IntProperty(Value=0)
        -> Take(Count=1) => #21
        #19, #21 -> Aeon.Acquisition.PrependOnce => #22
        #14, #16, #22 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
          Expression:
            new(
            Item1.PelletCount as BlockPelletCount,
            Item1.MaxPellets as BlockThreshold,
            (Item1.DueTime == 0
              ? TimeSpan.Zero
              : TimeSpan.FromSeconds(Item1.DueTime - Item2))
            .TotalMinutes as BlockDueTime,
            Item3 as BlockCount)
        SubscribeSubject EnvironmentConfiguration
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
          Expression: string.IsNullOrEmpty(Name) ? "NO ENVIRONMENT LOADED" : Name
        #13, #24, #26 -> CombineLatest
        -> Format
          Format:
            {8}
            Block ({9}, plt: {10}, thr: {11}, timeout: {12:0.##})
            P1 (rate: {2}, d0: {1}, thr: {0:0.##}))
          Selector="Item1.Threshold,Item1.D0,Item1.Rate,Item2.BlockPelletCount,Item2.BlockThreshold,Item2.BlockDueTime,Item2.BlockCount,Item3"
        -> Aeon.Environment.LabelControl(FontSize=14)
        -> VisualizerMapping => #30
        #3, #7, #11, #30 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=57.5), RowStyle(SizeType=Percent, Height=42.5)), CellSpans="")
        -> WorkflowOutput

        SubscribeSubject Patch1Controller => #33
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject Patch1ResetFeeder
        #33 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch1Events, DeliverPellet=Patch1DeliverPellet)
        -> MulticastSubject Patch1ManualPellet
    -> VisualizerMapping => #12
    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents
        -> IncludeWorkflow(Path=Extensions\SubjectDatabase.bonsai, DatabaseConfig=Z:\aeon\config\database.config)
        -> MulticastSubject SubjectState
        -> VisualizerMapping => #3
        SubscribeSubject AverageWeights
        -> LabeledSeriesVisualizerBuilder(Capacity=120)
        -> VisualizerMapping => #6
        SubscribeSubject NestWeightData
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            RawWeight.Value as Raw,
            FilteredWeight.Confidence == 1
              ? FilteredWeight.Value
              : single.NaN as Stable,
            FilteredWeight.Value - BaselinedWeight.Value as Baseline)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Raw,Stable,Baseline", SymbolType=None, LineWidth=1, Capacity=640, Min=nil, Max=nil)
        -> VisualizerMapping => #10
        #3, #6, #10 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput
    -> VisualizerMapping => #14
    #12, #14 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder EnvironmentState(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=40), RowStyle(SizeType=Percent, Height=60)), CellSpans="")

    ExternalizedMapping(SelectedStream)
    -> GroupWorkflow CameraSelector
        SubscribeSubject CameraTop
        -> MemberSelector(Selector=Value.Image) => #1
        SubscribeSubject CameraPatch1
        -> MemberSelector(Selector=Value.Image) => #3
        SubscribeSubject Heatmap => #4
        ExternalizedMapping(SelectedStream) => #5
        #1, #3, #4, #5 -> StreamSelector
          SelectedStream=CameraTop
          StreamNames
            string=CameraTop
            string=CameraWest
            string=CameraEast
            string=CameraNorth
            string=CameraSouth
            string=CameraNest
            string=CameraPatch1
            string=CameraPatch2
            string=CameraPatch3
            string=HeatMap
        -> WorkflowOutput

GroupWorkflow EnvironmentLogic
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> AsyncSubject Random

    GroupWorkflow DayTransition => #2
        SubscribeSubject Heartbeats
        -> Aeon.Acquisition.GetDateTime
        -> MemberSelector(Selector=Day)
        -> DistinctUntilChanged
        -> Skip(Count=1)
        -> StringProperty(Value=DayTransition)
        -> WorkflowOutput
    SubscribeSubject ReloadEnvironment
    -> MemberSelector(Selector=Value) => #4
    #2, #4 -> Merge
    -> GroupWorkflow ReloadEnvironment
        WorkflowInput Source1
        -> SelectMany GetEnvironmentFiles
            ExternalizedMapping(Path)
            -> Bonsai.IO.GetFiles(Path=Environments, SearchPattern=*.yml, SearchOption=TopDirectoryOnly)
            -> WorkflowOutput
        -> Condition NonEmpty
            WorkflowInput Source1
            -> MemberSelector(Selector=Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany SampleEnvironment
            WorkflowInput Source1
            -> AsyncSubject EnvironmentFiles

            SubscribeSubject EnvironmentFiles => #2
            SubscribeSubject EnvironmentFiles
            -> MemberSelector(Selector=Length)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper)
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(Value) => #9
            #2, #9 -> Index(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany ReadEnvironment
            WorkflowInput Source1
            -> AsyncSubject Path

            SubscribeSubject Path
            -> PropertyMapping(Path) => #3
            -> Bonsai.IO.ReadAllText
            -> Social.DeserializeFromYaml(Type=TypeMapping<Social.Environment>) => #5
            #5, #3 -> ValidateEnvironment
            -> Materialize => #7
            SubscribeSubject Path => #8
            #7, #8 -> WithLatestFrom
            -> Sink WriteErrorTrace
                WorkflowInput Source1
                -> Condition OnError
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Kind)
                    -> Equal(Operand=WorkflowProperty<System.Reactive.NotificationKind>(Value=OnError))
                    -> WorkflowOutput
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: "[LoadEnvironment Error]: (" + Item2 + ") " + Item1.Exception.ToString()
                -> Bonsai.IO.WriteLine
                -> WorkflowOutput
            -> Condition OnNext
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1.HasValue)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1.Value)
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject EnvironmentConfiguration
    -> PublishSubject EnvironmentLoaded

    GroupWorkflow PatchLogic => #9
        SubscribeSubject Patch1WheelDisplacement
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #2
        #1, #2 -> IncludeWorkflow Patch1DistanceState(Path=Aeon.Foraging:RandomDepletion.bonsai, DistanceThreshold=75, Rate=0.01, DeliveryCount=Patch1DeliveryCount, PatchState=Patch1State)
        -> MulticastSubject Patch1DeliverPellet
        -> MulticastSubject Patch1ThresholdCrossing
    Defer BlockLogic
        SubscribeSubject BlockState
        -> Take(Count=1)
        -> AsyncSubject BlockParameters

        SubscribeSubject Patch1ThresholdCrossing
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1) => #5
        SubscribeSubject BlockParameters
        -> MemberSelector(Selector=PelletCount) => #7
        #5, #7 -> Merge
        -> Accumulate
        -> MulticastSubject BlockPelletCount => #10
        SubscribeSubject BlockParameters
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: MaxPellets == 0 ? int32.MaxValue : MaxPellets
        -> PropertyMapping(MaxPellets) => #13
        #10, #13 -> Condition MaxPellets => #14
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=MaxPellets, Description="Specifies the maximum number of pellets before block transition.")) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=IntProperty(Value=2147483647))
            -> WorkflowOutput
        SubscribeSubject BlockParameters
        -> MemberSelector(Selector=DueTime)
        -> GroupWorkflow BlockTimeout => #17
            SubscribeSubject Heartbeats
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it == 0 ? double.PositiveInfinity : it
            #1, #3 -> WithLatestFrom
            -> GreaterThan
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=0)
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EnvironmentLoaded
        -> IntProperty(Value=-1) => #19
        #14, #17, #19 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject BlockTransitionEvent
    -> SelectMany BlockParameters => #12
        Defer ActiveEnvironment
            SubscribeSubject EnvironmentConfiguration
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Blocks.Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany SampleBlockType
            SubscribeSubject Random => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=Blocks)
            -> Merge
            -> MemberSelector(Selector=Weight)
            -> ToArray
            -> PropertyMapping(ProbabilityMass) => #6
            #0, #6 -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=1))
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany ConfigureBlockState
            SubscribeSubject EnvironmentConfiguration
            -> MemberSelector(Selector=Blocks) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> Zip
            -> Index
            -> Take(Count=1)
            -> AsyncSubject BlockState

            SubscribeSubject BlockState
            -> MemberSelector(Selector=Patches) => #8
            SubscribeSubject Random => #9
            SubscribeSubject BlockState
            -> PropertyMapping(Lower(Selector=MinPelletCount), Upper(Selector=MaxPelletCount)) => #11
            #9, #11 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
            -> Bonsai.Numerics.Distributions.Sample => #13
            SubscribeSubject Random => #14
            SubscribeSubject BlockState
            -> PropertyMapping(Lower(Selector=MinDueTime), Upper(Selector=MaxDueTime)) => #16
            #14, #16 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=0)
            -> Bonsai.Numerics.Distributions.Sample => #18
            SubscribeSubject Heartbeats
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> Take(Count=1) => #21
            #18, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression: Item1 == 0 ? 0 : Item2 + Item1 * 60
            #8, #13, #23 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                  Item1["patch1"].Distribution.Offset as ThresholdPatch1,
                  Item1["patch1"].Distribution.Rate as RatePatch1,
                  Item1["patch2"].Distribution.Offset as ThresholdPatch2,
                  Item1["patch2"].Distribution.Rate as RatePatch2,
                  Item1["patch3"].Distribution.Offset as ThresholdPatch3,
                  Item1["patch3"].Distribution.Rate as RatePatch3,
                  Item1["patchDummy1"].Distribution.Offset as ThresholdPatchDummy1,
                  Item1["patchDummy1"].Distribution.Rate as RatePatchDummy1,
                  0 as BlockPelletCount,
                  Item2 as BlockMaxPellets,
                  Item3 as BlockDueTime
                )
            -> Take(Count=1)
            -> WorkflowOutput
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject Patch1State
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject Patch2State
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch3 as D0,
                RatePatch3 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject Patch3State
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatchDummy1 as D0,
                RatePatchDummy1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchDummy1State
        -> Sink SetBlockState
            WorkflowInput Source1
            -> SelectMany
                WorkflowInput Source1
                -> PropertyMapping(PelletCount(Selector=BlockPelletCount), MaxPellets(Selector=BlockMaxPellets), DueTime(Selector=BlockDueTime))
                -> Social.BlockState(PelletCount=0, MaxPellets=0, DueTime=0)
                -> WorkflowOutput
            -> MulticastSubject BlockState
            -> WorkflowOutput
        -> WorkflowOutput
    #9, #12 -> TakeUntil
    -> Repeat

    SubscribeSubject BlockTransitionEvent
    -> PublishSubject BlockTransition

    PublishSubject<System.Int32> Patch1ThresholdCrossing

    GroupWorkflow UpdatePelletCount
        BehaviorSubject<System.Int32> BlockPelletCount => #0
        SubscribeSubject BlockState => #1
        #0, #1 -> WithLatestFrom
        -> SelectMany
            WorkflowInput Source1
            -> PropertyMapping(PelletCount(Selector=Item1), MaxPellets(Selector=Item2.MaxPellets), DueTime(Selector=Item2.DueTime))
            -> Social.BlockState(PelletCount=0, MaxPellets=0, DueTime=0)
            -> WorkflowOutput
        -> MulticastSubject BlockState
        -> WorkflowOutput
